PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = 1.0000, 1.0000, 1.0000
  expName = test360
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine intro
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    ImageComponent image_introduce
      image = image_introduce.png
      size = (1.4, 0.4)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_introduce
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine alphabet_random
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    TextComponent focus
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent image
      image = image_random.png
      size = (1, 1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 45
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    TextComponent blank
      letterHeight = 0.05
      startVal [time (s)] = 46
      stopVal [duration (s)] = 1.0
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    ImageComponent image_memorytest_2
      image = image_memorytest.png
      size = (0.9, 0.2)
      startVal [time (s)] = 47
      stopVal [duration (s)] = 180
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    KeyboardComponent key_resp_memory_test
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 47
      stopVal [duration (s)] = 180
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    SoundComponent sound_2
      sound [set every repeat] = B
      startVal [time (s)] = 227
      stopVal [duration (s)] = 1.0
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  Routine rest
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    ImageComponent image_5
      image = image_rest.png
      size = (0.75, 0.3)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_rest
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine alphabet_3
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    TextComponent focus_2
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent image_2
      image = image_3.png
      size = (1, 1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 45
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    TextComponent blank_2
      letterHeight = 0.05
      startVal [time (s)] = 46
      stopVal [duration (s)] = 1.0
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    ImageComponent image_memorytest_3
      image = image_memorytest.png
      size = (0.9, 0.2)
      startVal [time (s)] = 47
      stopVal [duration (s)] = 180
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    KeyboardComponent key_resp_memory_test_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 47
      stopVal [duration (s)] = 180
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    SoundComponent sound_3
      sound [set every repeat] = B
      startVal [time (s)] = 227
      stopVal [duration (s)] = 1.0
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  Routine alphabet_6
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    TextComponent focus_3
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent image_3
      image = image_6.png
      size = (1, 1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 45
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    TextComponent blank_3
      letterHeight = 0.05
      startVal [time (s)] = 46
      stopVal [duration (s)] = 1.0
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    ImageComponent image_memorytest_4
      image = image_memorytest.png
      size = (0.9, 0.2)
      startVal [time (s)] = 47
      stopVal [duration (s)] = 180
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    KeyboardComponent key_resp_memory_test_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 47
      stopVal [duration (s)] = 180
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    SoundComponent sound_4
      sound [set every repeat] = B
      startVal [time (s)] = 227
      stopVal [duration (s)] = 1.0
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  Routine finish
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    ImageComponent image_6
      image = image_finish.png
      size = (1.3, 0.3)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice
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    TextComponent focus_0
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent image_0
      image = image_practice.png
      size = (0.8, 0.8)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 45
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    TextComponent blank_0
      letterHeight = 0.05
      startVal [time (s)] = 46
      stopVal [duration (s)] = 1.0
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    ImageComponent image_memorytest
      image = image_memorytest.png
      size = (0.9, 0.2)
      startVal [time (s)] = 47
      stopVal [duration (s)] = 180
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    KeyboardComponent key_resp_memory_test_0
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 47
      stopVal [duration (s)] = 180
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    SoundComponent sound_1
      sound [set every repeat] = B
      startVal [time (s)] = 227
      stopVal [duration (s)] = 1.0
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  Routine ready
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    ImageComponent image_4
      image = image_ready.png
      size = (0.9, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_ready
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine intro
  Routine practice
  Routine ready
  Routine alphabet_3
  Routine rest
  Routine alphabet_6
  Routine rest
  Routine alphabet_random
  Routine finish
